PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = visual_attention
  Units = use prefs
  Screen = 1
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Routines
  Routine mostra_imagens
    ImageComponent image_1
      stopVal [duration (s)] = 5.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $IMAGENS
      size = (768, 512)
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    ImageComponent image_gray
      opacity = 0
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 5.0
      size = (0.5, 0.5)
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  Routine preparacao
    TextComponent text1
      stopVal [duration (s)] = 1.0
      text = Fase de calibracão iniciará em : 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text3
      stopVal [duration (s)] = 1.0
      text = Fase de calibracão iniciará em : 2
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    TextComponent text4
      stopVal [duration (s)] = 1.0
      text = Fase de calibracão iniciará em : 1
      startVal [time (s)] = 2.0
      letterHeight = 0.1
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  Routine instrucoes
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Bem vindo ao experimento
           de Atenção Visual

        Instruções:

        1- Serão mostradas a seguir algumas imagens.
        2- A primeira fase será de aquecimento, logo
        após será aplicado o experimento.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine calibracao
    ImageComponent image_2
      stopVal [duration (s)] = 5.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $IMAGENS
      size = (1600, 900)
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  Routine mostra_imagens_aquecimento
    ImageComponent image_aquecimento
      stopVal [duration (s)] = 5.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $IMAGENS
      size = [768, 512]
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    ImageComponent imagegray
      opacity = 0
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 5.0
      size = (0.5, 0.5)
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  Routine preparacao1
    TextComponent text_5
      text = O experimento iniciará em : 3
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_6
      text = O experimento iniciará em : 2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    TextComponent text_7
      text = O experimento iniciará em : 1
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 2.0
      letterHeight = 0.1
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  Routine contagem
    TextComponent text_2
      stopVal [duration (s)] = 1.0
      text = Fase de Aquecimento em: 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_3
      stopVal [duration (s)] = 1.0
      text = Fase de Aquecimento em: 2
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    TextComponent text_4
      stopVal [duration (s)] = 1.0
      text = Fase de Aquecimento em: 1
      startVal [time (s)] = 2.0
      letterHeight = 0.1
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  Routine fim
    TextComponent text_FIM
      stopVal [duration (s)] = 3.0
      text = Obrigado pela participação!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instrucoes
  Routine contagem
  LoopInitiator loop_0 loopType="TrialHandler"
    conditionsFile = ..\experiment_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\imagens\\1.jpg'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\imagens\\2.jpg'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\imagens\\3.jpg'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\imagens\\4.jpg'}]
    Routine mostra_imagens_aquecimento
  LoopTerminator loop_0
  Routine preparacao
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = ..\calibracao\experiment_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image1.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image2.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image3.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image4.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image5.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image6.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image7.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image8.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image9.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image10.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image11.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image12.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image13.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image14.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image15.png'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\calibracao\\image16.png'}]
    Routine calibracao
  LoopTerminator loop
  Routine preparacao1
  LoopInitiator loop_1 loopType="TrialHandler"
    conditionsFile = matheus_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\1.bmp'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\2.bmp'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\3.bmp'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\4.bmp'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\5.bmp'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\6.bmp'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\7.bmp'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\8.bmp'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\9.bmp'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\10.bmp'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\11.bmp'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\12.bmp'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\13.bmp'},
      {u'IMAGENS': u'C:\\Users\\LAPS\\Documents\\Mateus\\PIBIC\\Toyama\\toyama\\matheus_images\\14.bmp'}]
    Routine mostra_imagens
  LoopTerminator loop_1
  Routine fim
